<CompuCell3D Revision="20210612" Version="4.2.5">
   
 <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>2500</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="{{XDIM}}" y="{{XDIM}}" z="1"/>
      <Steps id="numbersteps">102510</Steps>
      <Temperature id="temp">10</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Epithelial"/>
      <CellType TypeId="2" TypeName="Mesenchymal"/>
   </Plugin>

   <Plugin Name="Contact">
       <!-- Specification of adhesion energies -->
       <Energy id="JMedMed" Type1="Medium" Type2="Medium">10.0</Energy>
       <Energy id="JMedE" Type1="Medium" Type2="Epithelial">10.0</Energy>
       <Energy id="JMedM" Type1="Medium" Type2="Mesenchymal">10.0</Energy>
       <Energy id="JEE" Type1="Epithelial" Type2="Epithelial">10.0</Energy>
       <Energy id="JEM" Type1="Epithelial" Type2="Mesenchymal">10.0</Energy>
       <Energy id="JMM" Type1="Mesenchymal" Type2="Mesenchymal">10.0</Energy>
       <NeighborOrder id="neighorder">2</NeighborOrder>
    </Plugin>

   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Volume">
    </Plugin>

    <Plugin Name="ExternalPotential">
       
       <!-- External force applied to cell. Each cell type has different force. -->
       <!-- For more flexible specification of the constraint (done in Python) please use ExternalPotential plugin without specifying per-type parameters -->
       <!-- Algorithm options are: PixelBased, CenterOfMassBased -->
       <Algorithm>CenterOfMassBased</Algorithm>

    </Plugin>

    <Plugin Name="Surface">
    </Plugin>
    
<Plugin Name="ConnectivityGlobal">
   
   <!-- Connectivity constraint applied to each cell. Energy penalty specifies how strong the constraint is. Penalty is specified for each type  -->
   <!-- This constraint works in 2D and 3D on all type of lattices. It might be slowdown your simulation. For faster option - 2D and square lattice you may use Connectivity or ConnectivityLocalFlex -->
   <!-- To speed up simulation comment out unnecessary constraints for types which don't need the constraint -->
   <!-- By default we will always precheck connectivity BUT in simulations in which there is no risk of having unfragmented cell one can add this flag to speed up computations -->
   <!-- To turn off precheck uncomment line below -->
   <!-- <DoNotPrecheckConnectivity/> -->
   <!--<Penalty Type="Epithelial">1000</Penalty>-->
   <!--<Penalty Type="Mesenchymal">1000</Penalty>-->
</Plugin>

<Plugin Name="PolarizationVector"/>

<Plugin Name="NeighborTracker">
   
   <!-- Module tracking neighboring cells of each cell -->
</Plugin>


<Plugin Name="PixelTracker">
   
   <!-- Module tracking pixels of each cell -->
</Plugin>



</CompuCell3D>
